CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:35
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.1137476
    Relative pixel spacing in Y:0.1137475
    Relative pixel spacing in Z:0.2985003
    Select the rule criteria:and (file does contain "C1-")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2-")
    Name to assign these images:chr18
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3-")
    Name to assign these images:chr19
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C4-")
    Name to assign these images:speckles
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DNA
    Name the output image:rescaledDNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:chr18
    Name the output image:rescaledCHR18
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:chr19
    Name the output image:rescaledCHR19
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:8|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
    Select the input image:speckles
    Name the output image:rescaledSPECKLES
    Rescaling method:Stretch each image to use the full intensity range
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
MedianFilter:[module_num:9|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
    Select the input image:rescaledDNA
    Name the output image:blurDNA
    Window:5

Threshold:[module_num:10|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
    Select the input image:blurDNA
    Name the output image:maskDNA
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.2
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RemoveHoles:[module_num:11|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
    Select the input image:maskDNA
    Name the output image:removeHolesDNA
    Size of holes to fill:120

Watershed:[module_num:12|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
    Select the input image:removeHolesDNA
    Name the output object:Nuclei
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:25
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

EnhanceOrSuppressFeatures:[module_num:13|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
    Select the input image:rescaledCHR18
    Name the output image:enhancedCHR18
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:14|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
    Select the input image:rescaledCHR19
    Name the output image:enhancedCHR19
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
Threshold:[module_num:15|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
    Select the input image:enhancedCHR18
    Name the output image:maskCHR18
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.2
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.25
    Upper outlier fraction:0
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:8
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
Threshold:[module_num:16|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
    Select the input image:enhancedCHR19
    Name the output image:maskCHR19
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.2
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:8
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
Threshold:[module_num:17|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
    Select the input image:rescaledSPECKLES
    Name the output image:maskSpeckles
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.2
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:8
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
Closing:[module_num:18|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
    Select the input image:maskCHR18
    Name the output image:closedCHR18
    Structuring element:disk,2

Closing:[module_num:19|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
    Select the input image:maskCHR19
    Name the output image:closedCHR19
    Structuring element:disk,2

Closing:[module_num:20|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
    Select the input image:maskCHR19
    Name the output image:closedCHR19
    Structuring element:disk,2

ConvertImageToObjects:[module_num:21|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
    Select the input image:closedCHR18
    Name the output object:spotsCHR18
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:22|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
    Select the input image:closedCHR19
    Name the output object:spotsCHR19
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

Watershed:[module_num:23|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
    Select the input image:maskSpeckles
    Name the output object:spotsSpeckles
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:5
    Downsample:1
    Separate watershed labels:No
    Declump method:Intensity
    Reference Image:rescaledSPECKLES
    Segmentation distance transform smoothing factor:5
    Minimum distance between seeds:5
    Minimum absolute internal distance:0.1
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:octahedron,20

OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:rescaledCHR18
    Name the output image:chr18_outline
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:spotsCHR18
    Select outline color:#1E90FF
    Select objects to display:Nuclei

OverlayOutlines:[module_num:25|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:rescaledCHR19
    Name the output image:chr19_outline
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:spotsCHR19
    Select outline color:#1E90FF
    Select objects to display:Nuclei

OverlayOutlines:[module_num:26|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:rescaledSPECKLES
    Name the output image:speks_outline
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:spotsSpeckles
    Select outline color:#1E90FF
    Select objects to display:Nuclei

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:chr18_outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:chr18
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_processed
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:chr19_outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:chr19
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_processed
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:speks_outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:speckles
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_processed
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RelateObjects:[module_num:30|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
    Parent objects:Nuclei
    Child objects:spotsCHR18
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:31|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
    Parent objects:Nuclei
    Child objects:spotsCHR19
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:32|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
    Select object sets to measure:Nuclei, spotsCHR18, spotsCHR19, spotsSpeckles
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:33|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
    Select objects to measure:spotsCHR18
    Select neighboring objects to measure:spotsSpeckles
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:34|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
    Select objects to measure:spotsCHR19
    Select neighboring objects to measure:spotsSpeckles
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:35|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/project/general_aktas/michal/speckle_playground/250328_DNAFISH_analysis/cp_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Nuclei|AreaShape_EquivalentDiameter,Nuclei|AreaShape_BoundingBoxMinimum_Y,Nuclei|AreaShape_BoundingBoxMinimum_Z,Nuclei|AreaShape_BoundingBoxMinimum_X,Nuclei|AreaShape_Volume,Nuclei|AreaShape_Center_Z,Nuclei|AreaShape_Center_Y,Nuclei|AreaShape_Center_X,Nuclei|AreaShape_BoundingBoxMaximum_Z,Nuclei|AreaShape_BoundingBoxMaximum_Y,Nuclei|AreaShape_BoundingBoxMaximum_X,Nuclei|AreaShape_SurfaceArea,Nuclei|AreaShape_MinorAxisLength,Nuclei|AreaShape_Extent,Nuclei|AreaShape_BoundingBoxVolume,Nuclei|AreaShape_MajorAxisLength,Nuclei|AreaShape_EulerNumber,Nuclei|Number_Object_Number,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:250331_cp_processed_
    Overwrite existing files without warning?:Yes
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