CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:maxProj/(?P<group>\d.+)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1-")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2-")
    Name to assign these images:exoSON
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3-")
    Name to assign these images:mRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:group

RescaleIntensity:[module_num:5|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
    Select the input image:DNA
    Name the output image:rescaledDNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:mRNA
    Name the output image:rescaledRNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:exoSON
    Name the output image:rescaledSON
    Rescaling method:Stretch each image to use the full intensity range
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
MedianFilter:[module_num:8|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
    Select the input image:rescaledDNA
    Name the output image:blurDNA
    Window:4

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:blurDNA
    Name the primary objects to be identified:bigNuclei
    Typical diameter of objects, in pixel units (Min,Max):80,160
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:60
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    Thresholding method:Otsu

ErodeObjects:[module_num:10|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
    Select the input object:bigNuclei
    Name the output object:Nuclei
    Structuring element:disk,2
    Prevent object removal:Yes
    Relabel resulting objects:No

MaskImage:[module_num:11|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
    Select the input image:rescaledRNA
    Name the output image:nuclearRNA
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MedianFilter:[module_num:12|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
    Select the input image:nuclearRNA
    Name the output image:blurRNA
    Window:3

IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:blurRNA
    Name the primary objects to be identified:RNAspeckles
    Typical diameter of objects, in pixel units (Min,Max):5,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

MaskImage:[module_num:14|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
    Select the input image:rescaledSON
    Name the output image:nuclearSON
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MedianFilter:[module_num:15|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
    Select the input image:nuclearSON
    Name the output image:blurSON
    Window:3

IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:blurSON
    Name the primary objects to be identified:SONspeckles
    Typical diameter of objects, in pixel units (Min,Max):8,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:17|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
    Select images to measure:DNA, exoSON, mRNA
    Select objects to measure:Nuclei, RNAspeckles, SONspeckles

FilterObjects:[module_num:18|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
    Select the objects to filter:Nuclei
    Name the output objects:Nuclei_speckles
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:Nuclei_noSpeckles
    Select the measurement to filter by:Intensity_MeanIntensity_exoSON
    Filter using a minimum measurement value?:Yes
    Minimum value:0.05
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:19|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
    Select object sets to measure:Nuclei, Nuclei_noSpeckles, Nuclei_speckles, RNAspeckles, SONspeckles
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:20|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
    Select images to measure:DNA, exoSON, mRNA
    Select objects to measure:Nuclei_noSpeckles, Nuclei_speckles, RNAspeckles, SONspeckles

MeasureColocalization:[module_num:21|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
    Select images to measure:exoSON, mRNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Both
    Select objects to measure:Nuclei_noSpeckles, Nuclei_speckles, RNAspeckles, SONspeckles
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

RelateObjects:[module_num:22|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
    Parent objects:Nuclei_speckles
    Child objects:RNAspeckles
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:23|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
    Parent objects:Nuclei_speckles
    Child objects:SONspeckles
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:rescaledRNA
    Name the output image:RNA_outline
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:RNAspeckles
    Select outline color:#1E90FF
    Select objects to display:Nuclei_speckles

OverlayOutlines:[module_num:25|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:rescaledSON
    Name the output image:speks_outline
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:SONspeckles
    Select outline color:#1E90FF
    Select objects to display:Nuclei_speckles

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:RNA_outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:mRNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_processed
    Saved file format:tiff
    Output file location:Elsewhere...|/project/bigdata_aktas/michal/data/Stellaris_STED/MM250902_pA_quant/cellprofiler/images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:speks_outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:exoSON
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_processed
    Saved file format:tiff
    Output file location:Elsewhere...|/project/bigdata_aktas/michal/data/Stellaris_STED/MM250902_pA_quant/cellprofiler/images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/project/bigdata_aktas/michal/data/Stellaris_STED/MM250902_pA_quant/cellprofiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:SONspeckles|Intensity_MaxIntensity_DNA,SONspeckles|Intensity_MaxIntensity_mRNA,SONspeckles|Intensity_MaxIntensity_exoSON,SONspeckles|Intensity_UpperQuartileIntensity_mRNA,SONspeckles|Intensity_UpperQuartileIntensity_DNA,SONspeckles|Intensity_UpperQuartileIntensity_exoSON,SONspeckles|Intensity_StdIntensityEdge_exoSON,SONspeckles|Intensity_StdIntensityEdge_mRNA,SONspeckles|Intensity_StdIntensityEdge_DNA,SONspeckles|Intensity_LowerQuartileIntensity_DNA,SONspeckles|Intensity_LowerQuartileIntensity_exoSON,SONspeckles|Intensity_LowerQuartileIntensity_mRNA,SONspeckles|Intensity_MaxIntensityEdge_DNA,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:250908_cellprofiler_
    Overwrite existing files without warning?:Yes
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